PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': 'XXX'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Fingertapping
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Routines
  Routine Start_Trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $textdur
      text [set every repeat] = $textstim
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    SoundComponent sound_1
      sound [set every repeat] = $sound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      syncScreenRefresh = False
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        outlet.push_sample(x=[marker])
  Routine Stop_Trial
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = Stop
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    SoundComponent sound_2
      sound = Audio\\Stop.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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  Routine Countdown
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Countdown will begin
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    SoundComponent sound_3
      sound = Audio\\Counter
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 3.5
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    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = One
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    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = Two
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    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1.0
      text = Three
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  Routine Wait_Begin
    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Test LSL Connection in Aurora before continuing

        Make sure subject is ready

        Press 'space' to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet # import required classes
        info = StreamInfo(name='Trigger', type='Markers', channel_count=1, channel_format='int32', source_id='Example') # sets variables for object info
        outlet = StreamOutlet(info) # initialize stream.
Flow
  Routine Wait_Begin
  Routine Countdown
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Psychopy_TrialTypes.xlsx
    loopType = sequential
    nReps = 5
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    conditions:
      [OrderedDict([('condition', 'left'), ('textstim', 'Left'), ('textdur', 1)]),
      OrderedDict([('condition', 'right'), ('textstim', 'Right '), ('textdur', 1)])]
    Routine Start_Trial
    Routine Stop_Trial
  LoopTerminator trials
